PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Completed URL = https://forms.gle/gZg9mwVsX4Fb9jZg9
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'prolificID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['prolificID.html', 'consent.html', 'consent_2.html', 'demographics.html']
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2022.2
  Window size (pixels) = [1280, 720]
  expName = qualifythenorientstroop021
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking the time to do the experiment.

        You may exit at any time by pressing Esc twice

        Press Space to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GeneralIntro
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This study investigates use of gender pronouns.
        We recognise that gender can be interpreted in binary and non-binary dimensions and our series of studies will investigate automatic biases towards use of binary and non-binary terms. In this first study, we are investigating binary terms and face categorisation of male and female presenting individuals.

        You may exit at any time by pressing Esc twice.
        Press Space to proceed.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        We are now downloading your data from the experiment.
        Please wait to be redirected to an online form.
        WARNING: If you do not fill in this form, you will not receive payment!
  Routine gender_label_task
    ImageComponent image_3
      image [set every repeat] = $filePath
      pos = (0, 0.2)
      size = [0.5,0.5]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    PolygonComponent focus
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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    PolygonComponent marker
      fillColor = white
      pos [set every frame] = [marker_pos_x, marker_pos_y]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        marker_pos_x = 0
        marker_pos_y = -0.3

        isWritten = False
        line_len = 1
        marks = [-2, -1, 0, 1, 2]
        labels = []
        std_ratio = (line_len/2) / marks[-1]
        std_ratio_inv = 1/std_ratio
        granularity = 0.01
        words = ['Very\nMasculine','Masculine','Neutral','Feminine','Very\nFeminine']
      Begin Routine:
        marker_pos_x = 0
        cur_pos = 0
        pressed = False
        timer = core.Clock()
        timer.reset()
      Each Frame:
        x = mouse.getPos()[0]
        if x > -line_len / 2 and x < line_len / 2:
            marker_pos_x = x

        if mouse.getPressed() == [1,0,0]:
            pressed = True

        if not isWritten and timer.getTime() > 0.5:
            count = 0
            for mark in marks:
                temp = visual.TextStim(win=win, name=str(mark),
                text=words[count],
                font='Open Sans',
                pos=[std_ratio * mark, marker_pos_y - 0.04], height=0.03, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=1,
                languageStyle='LTR',
                depth=-6.0);
                count += 1
                temp.setAutoDraw(True)
                labels.append(temp)
            isWritten=True
      End Routine:
        last_pos = marker_pos_x

        std_pos = last_pos * std_ratio_inv

        if pressed == True:
            thisExp.addData('sliderPos', std_pos)
        else:
            thisExp.addData('sliderPos', None)

        for label in labels:
            label.pos = (0,500)

        isWritten=False
        pressed = False
        timer.reset()
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    PolygonComponent scale
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = [0, marker_pos_y]
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine instructions_gender_label
    TextComponent instrText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Gender score is the cognitive judgement of the degree of masculinity or femininity of a face which is considered to be a continuum and they have long been used in psychological studies to understand the complex psychosocial relationships between people.

        You will be presented with a range of images of people’s faces and your task is to score these faces on the following scale:
        Very Masculine, Masculine, Neutral, Feminine, Very Feminine
        You can click anywhere on the scale, the points are just guidelines.
        You will have 3 seconds for each trial.

        There is no objective truth or correct answer; the answer is purely based on your interpretation. The task should take no longer than 10 minutes and you can leave at any time.

        Press Space to Continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine counterbalancing_routine
    CodeComponent counterbalancing
      Code Type = Both
      Before Experiment:
        from random import randint
        tasks = [0, 0]
        tasksDone = [False, False]

        loop_all_reps = len(tasksDone)
      Before JS Experiment:
        var loop_all_reps, tasks, tasksDone;
        tasks = [0, 0];
        tasksDone = [false, false];
        loop_all_reps = tasksDone.length;
      Begin JS Routine:
        done = false;
        while ((done === false)) {
            var r = Math.floor(Math.random() * 3);
            if (((tasks[r] === 0) && (! tasksDone[r]))) {
                tasks[r] = 1;
                done = true;
            }
        }
        for (var i, _pj_c = 0, _pj_a = util.range(0, tasks.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            if ((tasksDone[i] === true)) {
                tasks[i] = 0;
            }
        }
        tasksDone[r] = true;
      Begin Routine:
        done = False
        while done == False:
            r = randint(0,len(tasks)-1)
            if tasks[r] == 0 and not tasksDone[r]:
                tasks[r] = 1
                done = True

        for i in range(0, len(tasks)):
            if tasksDone[i] == True:
                tasks[i] = 0

        tasksDone[r] = True

        if Qualify[0] == 1 :
           loop_all_reps = 0
  Routine orientation_instr
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will be shown some photos of faces with corresponding words. Some faces will be in an upright position and some will be inverted. Together with each photo there will also be displayed a word: "upright" or "upside down".

        Your task is to decide whether the face orientation you are seeing matches the word. You will have only 3 seconds to answer so please respond as quickly as you can. To respond, press the left arrow on your keyboard for “no” and the right arrow for “yes”.

        Press the SPACE BAR if you are happy to proceed.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gender_instr
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will be shown some photos of faces along with binary pronouns “he/she”.

        Your task is to decide whether the face you are seeing matches the pronoun. You will have only 3 seconds to answer so please respond as quickly as you can. To respond, press the left arrow on your keyboard for “no” and the right arrow for “yes”.

        Press the SPACE BAR if you are happy to proceed.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gender_stroop_routine
    ImageComponent image_2
      image [set every repeat] = $filePath2
      pos = (0, .2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    TextComponent word_text_gender
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $word2
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      correctAns = $correctAns2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent focus_2
      fillColor = white
      pos = (0, .2)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.35
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  Routine orientation_stroop_routine
    KeyboardComponent key_resp
      allowedKeys = 'left','right',
      correctAns = $correctAns3
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent word_text
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $word3
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    ImageComponent image
      image [set every repeat] = $filePath3
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
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    PolygonComponent focus_1
      fillColor = white
      pos = (0, 0.2)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 0.35
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  Routine QualifyIntro
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        We will now present you with a training task to familiarise you with the experimental tasks. You must score at least 16 out of 20 in the training task to be selected for the main experiment.
        Your task is to decide if the word and photo match.
        If they match - press the right arrow
        If they do not match - press the left arrow
        Each task has a time limit, so proceed as quickly and as accurately as you can.
        Press the SPACE BAR if you are happy to proceed.
        You may exit at any time by pressing ESC twice.
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = Keyboard1.jpg
      pos = (0, -0.2)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        score = 0
  Routine QualifyTask
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $word1
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    ImageComponent image_4
      image [set every repeat] = $filePath1
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
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    PolygonComponent polygon
      fillColor = white
      pos = (0, 0.2)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = .35
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        q = 1
        score = 0
        DisQualify = [0]
        Qualify = [0]
        done = False;
      End Routine:
        if key_resp_14.corr == 1:
           score = score + 1;
        else :
           score = score;
    KeyboardComponent key_resp_14
      allowedKeys = 'y','n','left','right','space'
      correctAns = $correctAns1
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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  Routine DidTheyQualifyFortheExperiment
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every frame] = $score
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        DisQualify = [0]
        Qualify = [0]
      End Routine:
        if score  < 16 and done == False:
         DisQualify = [1]
         q = 1

        else :
            Qualify = [1]
            DisQualify = [0]
            q = 0
            done = True;
    TextComponent text_13
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Your score out of 20 points in the qualifying task was.:
  Routine ConsentEnd
    TextComponent text_10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        I agree to the University of Bristol keeping and processing the personal information from this study. I understand that my consent is conditional on the duties and obligations under the GPDR and DPA legislations.

        By pressing  SPACE I agree to my data being used in this study in an anonymised way. By pressing Escape twice or closing the browser I withdraw from the study and understand my data will be deleted.

        The study is covered by guidelines from the School of Psychological Science Research Ethics Committee at the University of Bristol. For a full copy of the ethical guidelines and answers to any questions or concerns please email me at s.j.hinde@bristol.ac.uk.
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Config
    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        score = 0
  Routine YourScore1
    TextComponent text_12
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Your score out of 20 points in the qualifying task was....
        (16 or greater required to qualify for the main experiment)
  Routine DisQualify
    TextComponent text_11
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Sorry but your score on the training task does not meet the criteria of
        at least 16 correct answers for doing the main experiment.
        Please try again.

        Thanks for trying.
  Routine Ethics
    TextComponent text_14
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        window.startHTML('OnlineConsentFormStart.htm');
  Routine GeneralIntroduction
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study on gender and pronouns at the University of Bristol. We recognize that gender can be interpreted in binary and non-binary ways, but in this study only binary pronouns will be presented. We also recognize that individuals can identify with whichever gender they choose, or not at all, but we seek to measure the strength of the most commonly used categories.
        WARNING: Do not exit the experiment before being directed to an online form at the end, or you will not recieve payment. Closing the window before being redirected to the form will also mean you don't receive credit.
        There will be an initial training task, then this study consists of two parts: in one task you will be asked whether photographs of faces match pronouns (“he/she’) and in another task you will be asked whether faces presented upright, or upside down match a presented word (“upright/upside down”).
        You may exit at any time by pressing ESC twice. Press the SPACE BAR if you are happy to proceed.
    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_15
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you for taking part in the experiment!
        You are now being redirected to an online form.
  Routine Init
    CodeComponent functions
      Code Type = JS
    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Loading...
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine consent_main
    CodeComponent skip_offline_3
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe_2
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('consent.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['vision'] = psychoJS.experiment._currentTrialData['Qvision'];
        expInfo['explain'] = psychoJS.experiment._currentTrialData['Qexplain'];
        expInfo['ask'] = psychoJS.experiment._currentTrialData['Qask'];
        expInfo['info'] = psychoJS.experiment._currentTrialData['Qinfo'];
        expInfo['info2'] = psychoJS.experiment._currentTrialData['Qinfo2'];
        expInfo['conformation_1'] = psychoJS.experiment._currentTrialData['Qconformation_1'];
        expInfo['QpavloviaID'] = psychoJS.experiment._currentTrialData['QpavloviaID'];
        continueRoutine = false;
  Routine consent_end
    CodeComponent skip_offline_4
      Code Type = Auto->JS
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
  Routine demographics_main
    CodeComponent skip_offline
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('demographics.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['consent'] = psychoJS.experiment._currentTrialData['Qconsent'];
        expInfo['gender'] = psychoJS.experiment._currentTrialData['Qgender'];
        expInfo['age'] = psychoJS.experiment._currentTrialData['Qage'];
        expInfo['english'] = psychoJS.experiment._currentTrialData['Qenglish'];
        expInfo['handedness'] = psychoJS.experiment._currentTrialData['Qhandedness'];
        continueRoutine = false;
  Routine demographics_end
    CodeComponent skip_offline_2
      Code Type = Auto->JS
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
  Routine consent_2
    CodeComponent skip_offline_5
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe_3
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('consent_2.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['date2'] = psychoJS.experiment._currentTrialData['Qdate2'];
        expInfo['conformation2_1'] = psychoJS.experiment._currentTrialData['Qconformation2_1'];
        continueRoutine = false;
  Routine consent_end_2
    CodeComponent skip_offline_6
      Code Type = Auto->JS
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      Begin Routine:
        #skip this component offline
        continueRoutine = False
  Routine attitudes_main
    CodeComponent skip_offline_7
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe_4
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('attitudes.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['QlocationUpbringing'] = psychoJS.experiment._currentTrialData['QlocationUpbringing'];
        expInfo['QpronounImportance'] = psychoJS.experiment._currentTrialData['QpronounImportance'];
        expInfo['QpronounVisual'] = psychoJS.experiment._currentTrialData['QpronounVisual'];
        expInfo['QpronounAddress'] = psychoJS.experiment._currentTrialData['QpronounAddress'];
        expInfo['QpronounAnxiety'] = psychoJS.experiment._currentTrialData['QpronounAnxiety'];
        continueRoutine = false;
  Routine attutides_end
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  Routine config2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        DisQualify = [1]
        Qualify = [0]
        loop_qualify = 1
  Routine pavloviaID_main
    CodeComponent skip_offline_9
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe_5
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('prolificID.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['QpavloviaID'] = psychoJS.experiment._currentTrialData['QpavloviaID'];
        continueRoutine = false;
  Routine pavloviaID_end
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  Routine test
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Any text

        including line breaks
Flow
  Routine Config
  Routine GeneralIntroduction
  Routine consent_main
  Routine consent_end
  Routine demographics_main
  Routine demographics_end
  Routine attitudes_main
  Routine attutides_end
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = q
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      Routine QualifyIntro
    LoopTerminator trials_7
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = QualifyDBX.xlsx
      loopType = random
      nReps = q
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      conditions:
        [{'word1': 'tiger', 'filePath1': 'tiger.jpg', 'correctAns1': 'right'},
        {'word1': 'apple', 'filePath1': 'apple.jpg', 'correctAns1': 'right'},
        {'word1': 'horse', 'filePath1': 'horse.jpg', 'correctAns1': 'right'},
        {'word1': 'car', 'filePath1': 'car.jpg', 'correctAns1': 'right'},
        {'word1': 'piano', 'filePath1': 'piano.jpg', 'correctAns1': 'right'},
        {'word1': 'bee', 'filePath1': 'bee.jpg', 'correctAns1': 'right'},
        {'word1': 'house', 'filePath1': 'house.jpg', 'correctAns1': 'right'},
        {'word1': 'chair', 'filePath1': 'chair.jpg', 'correctAns1': 'right'},
        {'word1': 'boat', 'filePath1': 'boat.jpeg', 'correctAns1': 'right'},
        {'word1': 'seaside', 'filePath1': 'seaside.jpg', 'correctAns1': 'right'},
        {'word1': 'cup', 'filePath1': 'frog.jpg', 'correctAns1': 'left'},
        {'word1': 'plate', 'filePath1': 'fire.jpg', 'correctAns1': 'left'},
        {'word1': 'bike', 'filePath1': 'deer.jpg', 'correctAns1': 'left'},
        {'word1': 'tree', 'filePath1': 'sun.jpg', 'correctAns1': 'left'},
        {'word1': 'cat', 'filePath1': 'moon.jpg', 'correctAns1': 'left'},
        {'word1': 'dog', 'filePath1': 'plane.jpg', 'correctAns1': 'left'},
        {'word1': 'man', 'filePath1': 'hat.jpg', 'correctAns1': 'left'},
        {'word1': 'woman', 'filePath1': 'beer.jpg', 'correctAns1': 'left'},
        {'word1': 'baby', 'filePath1': 'carrot.jpg', 'correctAns1': 'left'},
        {'word1': 'umbrella', 'filePath1': 'ball.jpg', 'correctAns1': 'left'}]
      Routine QualifyTask
    LoopTerminator trials_3
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = q
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      Routine DidTheyQualifyFortheExperiment
    LoopTerminator trials_8
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = DisQualify[0]
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      Routine DisQualify
    LoopTerminator trials_4
  LoopTerminator trials_6
  LoopInitiator loop_all loopType="TrialHandler"
    loopType = random
    nReps = loop_all_reps
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    Routine counterbalancing_routine
    LoopInitiator orientation_trial loopType="TrialHandler"
      loopType = random
      nReps = tasks[0]
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      Routine orientation_instr
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = WordsDBXCTRL.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'word3': 'upright', 'filePath3': '001_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '002_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '003_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '004_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '005_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '006_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '007_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '008_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '009_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '010_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '011_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '012_03.jpg', 'correctAns3': 'right'},
          {'word3': 'upright', 'filePath3': '001_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '002_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '003_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '004_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '005_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '006_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '007_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '008_03X.jpg', 'correctAns3': 'left'},
          {'word3': 'upright', 'filePath3': '009_03X.jpg', 'correctAns3': 'left'}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
        Routine orientation_stroop_routine
      LoopTerminator trials
    LoopTerminator orientation_trial
    LoopInitiator gender_stroop_trial loopType="TrialHandler"
      loopType = random
      nReps = tasks[1]
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      Routine gender_instr
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = WordsDBX.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'word2': 'she', 'filePath2': '001_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '002_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '003_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '006_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '007_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '009_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '010_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '011_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '013_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '014_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '016_03.jpg', 'correctAns2': 'right'},
          {'word2': 'she', 'filePath2': '019_03.jpg', 'correctAns2': 'right'},
          {'word2': 'he', 'filePath2': '083_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '086_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '087_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '090_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '091_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '094_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '097_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '099_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '100_03.jpg', 'correctAns2': 'left'},
          {'word2': 'he', 'filePath2': '102_03.jpg', 'correctAns2': 'left'}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
        Routine gender_stroop_routine
      LoopTerminator trials_2
    LoopTerminator gender_stroop_trial
  LoopTerminator loop_all
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine consent_2
    Routine consent_end_2
    Routine Thankyou
    Routine End
  LoopTerminator trials_5
